# Generated by Configurator on Tue Feb 25 13:12:54 CET 2025

# Reset
Property,Core,Initialize,0

# Devices
Device,TIScope,NikonTI,TIScope
Device,TIZDrive,NikonTI,TIZDrive
Device,TIXYDrive,NikonTI,TIXYDrive

# Pre-init settings for devices

# Pre-init settings for COM ports

# Hub (parent) references
Parent,TIZDrive,TIScope
Parent,TIXYDrive,TIScope

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions
FocusDirection,TIZDrive,0

# Roles
Property,Core,Focus,TIZDrive
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels

# Configuration presets
# Group: Channel

# Group: System
# Preset: Startup



# PixelSize settings

